---
API: 2.1
OpenSesame: 3.2.5
Platform: posix
---
set width 1800
set uniform_coordinates yes
set title trial1
set subject_parity even
set subject_nr 0
set start atlanta1
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 2048
set sampler_backend legacy
set round_decimals 2
set pygame_window_pos auto
set pygame_doublebuf no
set mouse_backend psycho
set keyboard_backend psycho
set height 1000
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 26
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/paxtonfitzpatrick/Documents/Dartmouth/Thesis/memory-dynamics/experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define sequence atlanta1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pre_questionnaire_p1 always
	run pre_questionnaire_p2 always
	run pre_questionnaire_p3 always
	run instructions always
	run readyforvideo always
	run format_video always
	run readyforrecall always
	run recall always
	run survey_response_logger always
	run finishedscreen always

define inline_script finishedscreen
	set description "Executes Python code"
	___run__
	done_canvas.show()
	
	time.sleep(30)
	__end__
	___prepare__
	import time
	
	done_canvas = Canvas()
	done_canvas.text('That\'s it! Thank you for participating!')
	__end__

define inline_script format_video
	set description "Executes Python code"
	___run__
	# from psychopy import visual
	
	# mov = visual.MovieStim(exp.window, '/Users/paxtonfitzpatrick/Documents/Dartmouth/Thesis/video-stims/atlanta-ep1.mp4', volume=0.0)
	# while mov.status != visual.FINISHED:
	# 	mov.draw()
	# 	exp.window.flip()
	
	
	cap = cv2.VideoCapture('/Users/paxtonfitzpatrick/Documents/Dartmouth/Thesis/video-stims/atlanta-ep1.mp4')
	
	while(cap.isOpened()):
		ret, frame = cap.read()
	
		gray = cv2.cvtColor(frame, cv2.COLOR_BGR2GRAY)
	
		cv2.imshow('frame',gray)
		if cv2.waitKey(1) & 0xFF == ord('q'):
			break
	
	cap.release()
	cv2.destroyAllWindows()
	__end__
	___prepare__
	import numpy as np
	import cv2
	__end__

define inline_script instructions
	set description "Executes Python code"
	___run__
	# arrange widgets
	instr.set_widget(title, (1,0), colspan=2)
	instr.set_widget(vidtext, (1,1))
	instr.set_widget(vidimg, (2,1))
	instr.set_widget(resttext, (1,2))
	instr.set_widget(restimg, (2,2))
	instr.set_widget(recalltext, (1,3))
	instr.set_widget(micimg, (2,3))
	instr.set_widget(gotit_button, (1,4), colspan=2)
	
	# instructions close when button is clicked
	button_clicked = instr._exec()
	__end__
	___prepare__
	# paths to images
	vidiconpath = pool['video.png']
	resticonpath = pool['clock.png']
	miciconpath = pool['mic.png']
	
	# create form
	instr = Form(
		cols=[1,10,2,1], rows=5,
		margins=(10,10,10,10), spacing=25
		)
	
	# title widget
	title = Label(text='Overview', center=True)
	
	# part 1 explanation and image
	vidtext = Label(
		text='You will first view an episode of the TV show <i)Atlanta</i>. The episode is approximately 25 minutes long.',
		center=False
		)
	vidimg = ImageWidget(path=vidiconpath)
	
	# part 2 explanation and image
	resttext = Label(
		text='You will then have an opportunity to take a brief break, if necessary. Once you are ready to continue, press the button to start the recall phase.', center=False
		)
	restimg = ImageWidget(path=resticonpath)
	
	# part 3 explanation and iamge
	recalltext = Label(
		text = 'Next, you will see a microphone icon. You will then have 10 minutes to describe what you recall of the episode <i>in as much detail as possible</i>. Try your best to recount the events in order, but if you realize you missed something, feel free to return to it.',
		center=False
		)
	micimg = ImageWidget(path=miciconpath)
	
	# continue button
	gotit_button = Button(text='Got it!')
	__end__

define inline_script pre_questionnaire_p1
	set description "Executes Python code"
	___run__
	presurvey_1.set_widget(presurvey_title,(1,0))
	presurvey_1.set_widget(age_l,(1,1))
	presurvey_1.set_widget(age_q,(1,2))
	presurvey_1.set_widget(sex_l,(1,3))
	presurvey_1.set_widget(sex_q,(1,4))
	presurvey_1.set_widget(ethnicity_l,(1,5))
	presurvey_1.set_widget(ethnicity_q,(1,6))
	presurvey_1.set_widget(next_button_p1,(1,7))
	
	button_clucked = presurvey_1._exec()
	__end__
	___prepare__
	presurvey_1 = Form(cols=[1,12,1],
		rows=8,
		margins=(10,10,10,10),
		spacing=25
		)
	
	# filter for questions that want numeric response
	def filter_digits(dig):
		return dig in '0123456789'
	
	# title widget
	presurvey_title = Label(text='<b>Pre-experiment Questionnaire</b>', center=True)
	
	# age (only accepts numbers)
	age_l = Label(text='Age')
	age_q = TextInput(var='age', key_filter=filter_digits)
	
	# sex
	sex_l = Label(text='Sex')
	sex_q = RatingScale(nodes=['Male','Female','Other'], var='sex')
	
	# Ethnicity
	ethnicity_l = Label(text='Ethnicity')
	ethnicity_q = RatingScale(nodes=['Hispanic\nor Latino','Not Hispanic\nor Latino'],
								var='ethnicity')
	
	
	
	next_button_p1 = Button(text='Next')
	__end__

define inline_script pre_questionnaire_p2
	set description "Executes Python code"
	___run__
	presurvey_title = Label(text='<b>Pre-experiment Questionnaire</b>', center=True)
	presurvey_2.set_widget(presurvey_title,(1,0))
	presurvey_2.set_widget(race_l,(1,1))
	presurvey_2.set_widget(race_q,(1,2))
	presurvey_2.set_widget(degree_l,(1,3))
	presurvey_2.set_widget(degree_q,(1,4))
	presurvey_2.set_widget(next_button_p2,(1,5))
	
	button_clucked = presurvey_2._exec()
	__end__
	___prepare__
	presurvey_2 = Form(cols=[1,12,1],
		rows=6,
		margins=(10,10,10,10),
		spacing=25
		)
	
	# Race
	race_l = Label(text='Race')
	race_q = RatingScale(nodes=['Native American\nor\nAlaska Native',
								'Native Hawaiian or\nPacific Islander',
								'Black or\nAfrican American','White','Other'],
							var='race')
	
	# Highest Degree Achieved
	degree_l = Label(text='Highest Degree Achieved')
	degree_q = RatingScale(nodes=['Some\nhigh school','High school\ngraduate',
								'Some\ncollege','College\ngraduate','some graduate\ntraining',
								'Master\'s\ndegree','Doctorate'],
							var='degree')
	
	next_button_p2 = Button(text='Next')
	__end__

define inline_script pre_questionnaire_p3
	set description "Executes Python code"
	___run__
	presurvey_title = Label(text='<b>Pre-experiment Questionnaire</b>', center=True)
	presurvey_3.set_widget(presurvey_title,(1,0))
	presurvey_3.set_widget(attn_l,(1,1))
	presurvey_3.set_widget(attn_q,(1,2))
	presurvey_3.set_widget(sleep_l,(1,3))
	presurvey_3.set_widget(sleep_q,(1,4))
	presurvey_3.set_widget(coffee_l,(1,5))
	presurvey_3.set_widget(coffee_q,(1,6))
	presurvey_3.set_widget(alert_l,(1,7))
	presurvey_3.set_widget(alert_q,(1,8))
	presurvey_3.set_widget(survey_done_button,(1,9))
	
	button_clicked = presurvey_3._exec()
	__end__
	___prepare__
	presurvey_3 = Form(cols=[1,12,1],
		rows=10,
		margins=(10,10,10,10),
		)
	
	# memory/attention
	attn_l = Label(text='Are you taking any medications or have you had any recent injuries\nthat could affect your memory or attention? ("No" or please describe)')
	attn_q = TextInput(var='mem_attn')
	
	# Sleep (only accepts numbers)
	sleep_l = Label(text='How many hours of sleep did you get last night?')
	sleep_q = TextInput(var='sleep', key_filter=filter_digits)
	
	# Coffee (only accepts numbers)
	coffee_l = Label(text='How many cups of coffee have you had today?')
	coffee_q = TextInput(var='coffee', key_filter=filter_digits)
	
	# alertness
	alert_l = Label(text='How alert are you feeling?')
	alert_q = RatingScale(nodes=['Very\nsluggish','A little\nsluggish','Neutral','A little\nalert','Very\nalert'],
							var='alertness')
	survey_done_button = Button(text='Done')
	__end__

define form_multiple_choice preq1_sex
	set timeout infinite
	set spacing 10
	set question "Sex?"
	__options__
	Male
	Femal
	Other
	__end__
	set margins "50;50;50;50"
	set form_var sex
	set form_title "Pre-experiment Questionnaire"
	set description "A simple multiple choice item"
	set button_text Next
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice preq2
	set timeout infinite
	set spacing 10
	set question "Survey question 2?"
	__options__
	Yes
	No
	Maybe
	__end__
	set margins "50;50;50;50"
	set form_var preq2
	set form_title "Pre-experiment Survey"
	set description "A simple multiple choice item"
	set button_text Next
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_text_input presurveyq3
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var preq3
	set form_title "Pre-experiment Survey"
	set form_question "Survey question 3?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define inline_script presurveyq3_1
	set description "Executes Python code"
	___run__
	q3form.set_widget(q3answer,(0,0))
	q3form._exec()
	
	q3_key_pressed = my_keyboard.get_key()
	if q3_key_pressed == 'ENTER':
		my_keyboard.flush()
		q3form._exec()
	__end__
	___prepare__
	q3form = Form()
	q3answer = TextInput(
		text='Survey question 3?',
		frame=True,
		center=True,
		return_accepts=True,
		var='preq3')
	__end__

define form_text_display readyforrecall
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ready
	set margins "50;50;50;50"
	set form_title "Ready?"
	__form_text__
	Press the "Ready!" button to begin recalling the vdieo.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=yes text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display readyforvideo
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Ready!"
	set margins "50;50;50;50"
	set form_title "Ready?"
	__form_text__
	Press the "Ready!" button to begin the video
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=yes text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script recall
	set description "Executes Python code"
	___run__
	# show mic image on screen
	recall_canvas.show()
	
	# record audio
	duration = 10  # seconds
	fs = 44100
	var.recall_audio = sd.rec(int(duration * fs), samplerate=fs, channels=2, blocking=True)
	
	# generate random subject ID for data protection
	randstr = ''.join([random.choice(string.ascii_letters + string.digits) for n in xrange(10)])
	var.subid = 'subject'+randstr
	
	# identify data folder
	datapath = var.experiment_path[:-10]+'data/audio-arrays/'
	
	# save recall
	np.save(datapath+var.subid, var.recall_audio, allow_pickle=False)
	__end__
	___prepare__
	import sounddevice as sd
	import numpy as np
	import random
	import string
	
	miciconpath = pool['mic.png']
	recall_canvas = Canvas()
	recall_canvas.image(miciconpath, scale=0.25)
	__end__

define logger survey_response_logger
	set description "Logs experimental data"
	set auto_log no
	log subid
	log age
	log sex
	log ethnicity
	log race
	log degree
	log mem_attn
	log sleep
	log coffee
	log alertness

define media_player_mpy video
	set video_src "../../video-stims/atlanta-ep1.mp4"
	set soundrenderer sounddevice
	set resizeVideo yes
	set playaudio yes
	set loop no
	set event_handler_trigger "after every frame"
	__event_handler__
	# FULL VIDEO IS 1,466,000 MS
	__end__
	set duration keypress
	set description "Media player based on moviepy"

